begin model
# FluBNF SIHRS, CARTESIAN seasonal beta (RESEARCH: no runtime path; pinned by
# tests/test_seasonal.py). Same model and parameter count as SIHRS_pop.bngl;
# each harmonic is written a*cos + b*sin instead of eps*cos(t - phi):
#   eps*cos(2*pi*(t-phi)/P)  ==  a*cos(2*pi*t/P) + b*sin(2*pi*t/P)
#     a = eps*cos(2*pi*phi/P),  b = eps*sin(2*pi*phi/P)
# Exact. It removes the eps->0 funnel, the 0/52 phase wall and the 1/eps prior
# artifact that left polar adaptive-MCMC chains unmixed (measurement record:
# docs/MODEL-PROVENANCE.md section 8). Recover (eps, phi) from SAMPLES with
# flubnf.seasonal.to_polar.
# Fitted (8): Reff, a1, b1, a2, b2, mult, impr, r. Tokens as SIHRS_pop.bngl:
# {{POP}} {{S0FRAC}} {{I0FRAC}} {{GAMMA}} {{RHO}} {{GAMMAH}} {{OMEGA}}.
begin parameters

### -- transmission: scale-free reproduction number + seasonal forcing -- ###
Reff    Reff__FREE     # BASE reproduction number: harmonic-neutral, at the
                       # initial s0; season-start value Reff*exp(a1+a2); R0 = Reff/s0

# Prior boxes and their stiffness note: flubnf/sihrs_fit.py::CART_PRIORS.
a1      a1__FREE       # annual  cos coefficient
b1      b1__FREE       # annual  sin coefficient
a2      a2__FREE       # semi-annual cos coefficient
b2      b2__FREE       # semi-annual sin coefficient

### -- progression / removal -- ###
gamma   {{GAMMA}}      # FIXED: 7/3.2 d generation time, Chan 2024 doi:10.1101/2024.08.17.24312064
rho     {{RHO}}        # FIXED: true IHR branching fraction I->H; rules only,
                       # never the observable
mult    mult__FREE     # ascertainment, OBSERVATION-ONLY: it must never appear
                       # in a reaction rule
gammaH  {{GAMMAH}}     # FIXED: discharge; does not enter the admissions target
omega   {{OMEGA}}      # FIXED: waning R->S, weakly identified from <3 seasons

### -- external force of infection (reseeding) -- ###
# Required: waning refills S but supplies no I, and infection needs I.
# S()->I() conserves N.
impr    impr__FREE     # per-susceptible per-week external infection hazard

### -- observation noise -- ###
r       r__FREE        # negative-binomial dispersion (AMCMC)

### -- derived -- ###
beta0   Reff*gamma/s0
pi      3.141592653589793  # avoid BNGL _pi(): bngsim codegen emits M_PI(), which will not compile

### -- FIXED per-state structural constants (known data, never fitted) -- ###
N       {{POP}}        # state population (absolute people)
s0      {{S0FRAC}}     # initial susceptible fraction
i0      {{I0FRAC}}     # initial infected fraction

end parameters

begin molecule types
S()         # susceptible people
I()         # infectious people
H()         # hospitalized census / occupancy
R()         # recovered / immune people
Hadm()      # cumulative admissions accumulator (never decays)
counter()   # clock: observable t = weeks
end molecule types

begin seed species
S() N*s0
I() N*i0
H() 0
R() N*(1-s0-i0)
Hadm() 0
counter() 0
end seed species

begin observables
Molecules S     S()
Molecules I     I()
Molecules H     H()        # census -- do NOT fit to an admissions target
Molecules R     R()
Molecules H_Cum Hadm()     # cumulative admissions; the weekly count is this observable's change across the reporting week
Molecules t     counter()
end observables

begin functions

### -- seasonal transmission, CARTESIAN. exp() keeps beta > 0, exactly as before -- ###
beta() = beta0*exp( a1*cos(2*pi*t/52) + b1*sin(2*pi*t/52) \
                  + a2*cos(4*pi*t/52) + b2*sin(4*pi*t/52) )

### -- ascertained admission flux into H, an INSTANTANEOUS rate -- ###
# People per week at an instant, NOT a weekly total: the weekly count is
# the increment of H_Cum across the reporting week.
H_weekly() = rho*mult*gamma*I

end functions

begin reaction rules
0 -> counter() 1
# infection, FREQUENCY-DEPENDENT: rate constant beta()/N -> flux beta*S*I/N
S() + I() -> I() + I()   beta()/N
I() -> H()   rho*gamma
I() -> R()   (1-rho)*gamma
H() -> R()   gammaH
R() -> S()   omega
# external reseeding: keeps I off the numerical floor between seasons
S() -> I()   impr
# accumulator: tallies the I->H flux without consuming I, so S+I+H+R = N
I() -> I() + Hadm()   rho*gamma
end reaction rules

end model

begin actions
generate_network({overwrite=>1})
simulate({suffix=>"SIHRS_flu",method=>"ode",t_start=>0,t_end=>48,n_steps=>48,print_functions=>1})
end actions
